PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[1.0,1.0,1.0]
  expName = prueba de sumacion
  keyboardBackend = ioHub
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Routines
  Routine ENTRENAMIENTO_EXCITADOR_DE_TRANSFERENCIA_ADQUISICION
    ImageComponent foto_excitadordetransferencia_pds
      image [set every repeat] = $EXCITADOR_DE_TRANSFERENCIA_ADQUISICION
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent EIfotoPERRO_excitadordetransferencia_pds
      image [set every repeat] = $EI_FOTO
      size = (0.5, 0.5)
      startVal [time (s)] = 4.1
      stopVal [duration (s)] = 0.7
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    SoundComponent EISONIDO_excitadordetransferencia_pds
      sound [set every repeat] = $EI_SONIDO
      startVal [time (s)] = 4.1
      stopVal [duration (s)] = 0.7
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  Routine ITI_estimulocompuestoinhibidor_PDS
    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ITI_estimulocompuestoneutro_PDS
    PolygonComponent polygon_2
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ITI_estimuloexcitatorio_PDS
    PolygonComponent polygon_5
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine ITI
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $duracion_cross
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    CodeComponent code_iti
      Code Type = Auto->JS
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      Begin Routine:
        original_color = win.color
        win.color = 'black'  # Cambia el color de fondo negro
        import time

        # Inicializar una variable para almacenar el tiempo de inicio del experimento
        inicio_experimento = time.time()

        # Crear un objeto de texto para mostrar el tiempo transcurrido
        texto_tiempo = visual.TextStim(win=win, text='', pos=(0, -0.25), height=0.1, color='white')

        import random

        # Generar una duración aleatoria entre 3 y 5 segundos
        duracion_cross = random.uniform(3, 5)

        # Guardar la duración en una variable que puedas utilizar en tu experimento
        thisExp.addData('duracion_cross', duracion_cross)
      End Routine:
        win.color = original_color
  Routine ESTIMULO_COMPUESTO_INHIBIDOR_pds
    ImageComponent foto_inhibidor_a_prueba_pds
      image [set every repeat] = $INHIBIDOR_A_PRUEBA_ADQUISICION
      pos = (1.0, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent foto_excitadordetransferencia_pds_foto
      image [set every repeat] = $EXCITADOR_DE_TRANSFERENCIA_ADQUISICION
      pos = (0.0, 1.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent escalaexpectativa_estimulocompuestoinhibidor_pds
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = ¿Cuán probable es que se presente la imagen y el sonido desagradable? lala
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    SliderComponent slider_expectativa_estimulocompuestoinhibidor_pds
      forceEndRoutine = False
      granularity = 1
      labels = "Poco probable" , "Muy probable"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine ESTIMULO_COMPUESTO_NEUTRO_pds
    ImageComponent foto_estimulo_neutro_pds
      image [set every repeat] = $ESTIMULO_NEUTRO_ADQUISICION
      pos = (1.0, 0.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent foto_excitadordetransferencia_estimulocompuestoneutro_pds
      image [set every repeat] = $EXCITADOR_DE_TRANSFERENCIA_ADQUISICION
      pos = (0, 1.0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4
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    TextComponent escalaexpectativa_estimulocompuestoneutro_pds
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = ¿Cuán probable es que se presente la imagen y el sonido desagradable?
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    SliderComponent slider_estimulocompuestoneutro_pds
      forceEndRoutine = False
      granularity = 1
      labels = "Poco probable" , "Muy probable"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 4
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine ESTIMULO_EXCITATORIO_PDS
    ImageComponent foto_estimulo_condicionado_excitatorio_pds
      image [set every repeat] = $ESTIMULO_EXCITATORIO
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent escalaexpectativa_estimulocondicionadoexcitatorio_pds
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = ¿Cuán probable es que se presente la imagen y el sonido desagradable?
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    SliderComponent slider_estimulocondicionadoexcitatorio_pds
      forceEndRoutine = False
      granularity = 1
      labels = "Poco probable" , "Muy probable"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0
      stopVal [time (s)] = 4
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    ImageComponent eifoto_estimulocondicionadoexcitatorio_pds
      image [set every repeat] = $EI_FOTO
      size = (0.5, 0.5)
      startVal [time (s)] = 4.1
      stopVal [duration (s)] = 0.7
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    SoundComponent eisonido_estimulocondicionadoexcitatorio_pds
      sound [set every repeat] = $EI_SONIDO
      startVal [time (s)] = 4.1
      stopVal [duration (s)] = 0.7
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  Routine estimulo_compuesto_inhibidor_miedo_pds
    ImageComponent foto_inhibidor_a_prueba_miedo_pds
      image [set every repeat] = $INHIBIDOR_A_PRUEBA_ADQUISICION
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent foto_excitador_de_transferencia_miedo_pds
      image [set every repeat] = $EXCITADOR_DE_TRANSFERENCIA_ADQUISICION
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent texto_escala_miedo_estimulo_compuesto_inhibidor_pds
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = ¿Cuánto miedo te da esta foto?
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    SliderComponent slider_miedo_estimulo_compuesto_inhibidor_pds
      forceEndRoutine = True
      granularity = 1
      labels = "Poco miedo" , "Mucho miedo"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine estimulo_compuesto_neutro_miedo_pds
    ImageComponent foto_estimulo_compuesto_neutro_miedo_pds
      image [set every repeat] = $ESTIMULO_NEUTRO_ADQUISICION
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent foto_excitador_transferencia_miedo_pds
      image [set every repeat] = $EXCITADOR_DE_TRANSFERENCIA_ADQUISICION
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent texto_estimulo_compuesto_neutro_miedo_pds
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = ¿Cuánto miedo te da esta foto?
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    SliderComponent slider_
      forceEndRoutine = True
      granularity = 1
      labels = "Poco miedo", "Mucho miedo"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine estimulo_excitatorio_miedo_pds
    ImageComponent foto_estimulo_excitatorio_miedo_pds
      image [set every repeat] = $ESTIMULO_EXCITATORIO
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    TextComponent texto_estimulo_excitatorio_miedo_pds
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = ¿Cuánto miedo tienes?
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    SliderComponent slider_estimulo_condicionado_excitatorio_miedo_pds
      forceEndRoutine = False
      granularity = 1
      labels = "Poco miedo", "Mucho miedo"
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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    SoundComponent sonido_ei_estimulo_excitatorio_miedo_pds
      sound [set every repeat] = $EI_SONIDO
      startVal [time (s)] = 4.1
      stopVal [duration (s)] = 0.7
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    ImageComponent foto_ei_estimulo_excitatorio_miedo_pds
      image [set every repeat] = $EI_SONIDO
      size = (0.5, 0.5)
      startVal [time (s)] = 4.1
      stopVal [duration (s)] = 0.7
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Flow
  LoopInitiator bucle_excitadordetransferencia_pds loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = $"G"+expInfo['grupo contr']+".xlsx"
    loopType = random
    nReps = 14
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    Routine ENTRENAMIENTO_EXCITADOR_DE_TRANSFERENCIA_ADQUISICION
    Routine ITI
  LoopTerminator bucle_excitadordetransferencia_pds
  LoopInitiator bucle_estimulocompuestoinhibidor_expectativa_PDS loopType="TrialHandler"
    conditionsFile = $"G"+expInfo['grupo contr']+".xlsx"
    loopType = random
    nReps = 4
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    Routine ESTIMULO_COMPUESTO_INHIBIDOR_pds
    Routine ITI
  LoopTerminator bucle_estimulocompuestoinhibidor_expectativa_PDS
  LoopInitiator bucle_estimulocompuestoneutro_expectativa_PDS loopType="TrialHandler"
    conditionsFile = $"G"+expInfo['grupo contr']+".xlsx"
    loopType = random
    nReps = 4
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    Routine ESTIMULO_COMPUESTO_NEUTRO_pds
    Routine ITI
  LoopTerminator bucle_estimulocompuestoneutro_expectativa_PDS
  LoopInitiator bucle_estimuloexcitatorio_expectativa_PDS loopType="TrialHandler"
    Selected rows = 0:2
    conditionsFile = $"G"+expInfo['grupo contr']+".xlsx"
    loopType = random
    nReps = 4
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    Routine ESTIMULO_EXCITATORIO_PDS
    Routine ITI
  LoopTerminator bucle_estimuloexcitatorio_expectativa_PDS
  LoopInitiator bucle_estimulocompuestoinhibidor_miedo_pds loopType="TrialHandler"
    conditionsFile = $"G"+expInfo['grupo contr']+".xlsx"
    loopType = random
    nReps = 4
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    Routine estimulo_compuesto_inhibidor_miedo_pds
    Routine ITI
  LoopTerminator bucle_estimulocompuestoinhibidor_miedo_pds
  LoopInitiator bucle_estimulocompuestoneutro_miedo_pds loopType="TrialHandler"
    conditionsFile = $"G"+expInfo['grupo contr']+".xlsx"
    loopType = random
    nReps = 4
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    Routine estimulo_compuesto_neutro_miedo_pds
    Routine ITI
  LoopTerminator bucle_estimulocompuestoneutro_miedo_pds
  LoopInitiator bucle_estimuloexcitatorio_miedo_pds loopType="TrialHandler"
    conditionsFile = $"G"+expInfo['grupo contr']+".xlsx"
    loopType = random
    nReps = 4
    random seed = 0:2
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    Routine estimulo_excitatorio_miedo_pds
    Routine ITI
  LoopTerminator bucle_estimuloexcitatorio_miedo_pds
